config:
  title: Collection_Management
  description: A group of libraries to assist with collections and using collections
  copyright: UW_BIOFAB
  version: 0.0.1
  authors: [{name: Cannon Mallory, affiliation: UW_BIOFAB}, {name: Amy Cash, affiliation: UW_BIOFAB}, {name: Justin Vrana, affiliation: UW_BIOFAB}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  github: {user: malloc3, repo: aq-collection-management}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: CollectionActions, category: Collection_Management}
code_source:
# frozen_string_literal: true

# Cannon Mallory
# malloc3@uw.edu
#
# Module for working with collections
# These actions should involve the WHOLE plate not individual wells.
# NOTE: The collection is doing the whole action

needs 'Standard Libs/ItemActions'

module CollectionActions
  include ItemActions

  # Creates new collection.  Instructions to tech optional
  #
  # @param c_type [String] the collection type
  # @param label_plate [Boolean] instructs tech to label if true
  # @return working_plate [Collection]
  def make_new_plate(c_type, label_plate: true)
    working_plate = Collection.new_collection(c_type)
    get_and_label_new_plate(working_plate) if label_plate
    working_plate
  end

  # Makes the required number of collections and populates with samples
  # returns an array of of collections created
  #
  # @param samples [Array<FieldValue>] or [Array<Samples>]
  # @param collection_type [String] the type of collection that is to be made
  # @param first_collection [Collection] optional a collection to start with
  # @param add_column_wise [Boolean] default false add samples by column
  # @param label_plates [Boolean] default false, provides instructions
  # @return [Array<Collection>] array of collections created
  def make_and_populate_collection(samples, collection_type: nil,
                                   first_collection: nil,
                                   add_column_wise: false,
                                   label_plates: false)

    if collection_type.nil? && first_collection.nil?
      ProtocolError 'Either collection_type or first_collection must be given'
    end

    unless collection_type.nil? || first_collection.nil?
      ProtocolError 'Both collection_type and first_collection cannot be given'
    end

    capacity = nil
    if collection_type.nil?
      collection_type = fisrt_collection.object_type.name
      capacity = first_collection.capacity
      remaining_space = first_collection.get_empty.length
      add_samples_to_collection(samples[0...remaining_space - 1],
                                first_collection,
                                label_plates: label_plates,
                                add_column_wise: add_column_wise)
      samples = samples.drop(remaining_space)
    else
      obj_type = ObjectType.find_by_name(collection_type)
      capacity = obj_type.columns * obj_type.rows
    end

    collections = []
    collections.push(first_collection) unless first_collection.nil?
    grouped_samples = samples.in_groups_of(capacity, false)
    grouped_samples.each do |sub_samples|
      collection = make_new_plate(collection_type, label_plate: label_plates)
      add_samples_to_collection(sub_samples, collection, 
                                add_column_wise: add_column_wise)
      collections.push(collection)
    end
    collections
  end

  # Assigns samples to specific well locations
  #
  # @param samples [Array<FieldValue>] or [Array<Samples>]
  # @param to_collection [Collection]
  # @param add_row_wise [Boolean] default false, will add samples by column
  # @raise if not enough space in collection
  def add_samples_to_collection(samples, to_collection, add_column_wise: false)
    samples.map! do |fv|
      unless fv.is_a?(Sample)
        fv = fv.sample
      end
      fv
    end

    slots_left = to_collection.get_empty.length
    raise 'Not enough space in in collection' if samples.length > slots_left

    if add_column_wise
      add_samples_column_wise(samples, to_collection)
    else
      to_collection.add_samples(samples)
    end
    to_collection
  end

  # Adds samples to the first slot in the first available column
  # as opposed to column wise that the base version does.
  #
  # @param samples_to_add [Array<Samples>] an array of samples
  # @param collection [Collection] the collection to include samples
  def add_samples_column_wise(samples_to_add, collection)
    col_matrix = collection.matrix
    columns = col_matrix.first.size
    rows = col_matrix.size
    samples_to_add.each do |sample|
      break_pattern = false
      columns.times do |col|
        rows.times do |row|
          if collection.part(row, col).nil?
            collection.set(row, col, sample)
            break_pattern = true
            break
          end
        end
        break if break_pattern
      end
    end
  end

  # Instructions on getting and labeling new plate
  #
  # @param plate [Collection] the plate to be retrieved and labeled
  def get_and_label_new_plate(plate)
    show do
      title 'Get and Label Working Plate'
      note "Get a <b>#{plate.object_type.name}</b> and
           label it ID: <b>#{plate.id}</b>"
    end
  end

  # Associates field_values to corresponding samples in a collection
  # TODO not sure multiples of samples is handled in the best way...
  #
  # @param field_values [Array<Field Values>] array of field values
  # @param collection [Collection] the destination collection
  # replaced make_output_plate
  def associate_field_values_to_plate(field_values, collection)
    already_associated_parts = []
    field_values.each do |fv|
      r_c = nil
      collection.find(fv.sample).each do |loc|
        r_c = loc
        break unless already_associated_parts.include?(loc)
      end
      r_c = collection.find(fv.sample).first
      unless r_c.nil?
        fv.set(collection: collection, row: r_c[0], column: r_c[1])
      end
    end
  end
end

library: {name: CollectionData, category: Collection_Management}
code_source:
# CollectionData

needs 'Standard Libs/AssociationManagement'

# for managing data associations of collections
# and ensuring that samples/item data is handled correctly
module CollectionData
  include AssociationManagement
  include PartProvenance

  # Is this being used?
  # Associates data to every part in a plate
  #
  # @param plate [Collection] the collection
  # @param data [Anything] the data to be associated
  def associate_to_all(plate:, data:, key:)
    data_map = []
    parts.each do |part|
      loc = plate.find(part)
      loc[2] = data
      loc[3] = key
      data_map.push(loc)
    end
    associate_value_key_to_parts(plate: plate, data_map: data_map)
  end

  # Creates table for the data associated with key
  #
  # @param collection [Collection] the plate being used
  # @param keys [Array<String>] an array of keys that the data is
  #        associated with.
  # @return table of parts with data information

  def display_all_data(collection, keys)
    rc_list = []
    parts = collection.parts
    parts.each do |part|
      rc_list += collection.find(part)
    end
    display_data(collection, rc_list, keys)
  end

  # Associates data in data_map to parts in plate.
  #
  # @param plate [Collection] the plate containing the Items
  # @param data_map [Array<Array<row, column, value>, ...>] 
  #                                         determine where data goes
  # @param key [String] the key that
  def associate_value_to_parts(plate:, data_map:, key:)
    data_map.each do |loc_val_array|
      loc_val_array[3] = key
    end
    associate_value_key_to_parts(plate: plate, data_map: data_map)
  end

  # Creates a DataAssociation for each entry with Key :part_data and
  # Value "well" (saved as DataAssociation.object)
  # Each value is associated to its respective key
  #
  # @param plate [Collection] the plate that contains the parts (items)
  # @param data_map [Array<Array<r,c, value, key>, ...>] data map of all parts
  def associate_value_key_to_parts(plate:, data_map:)
    data_map.each do |key_value_map|
      part = plate.part(key_value_map[0], key_value_map[1])
      data_value = key_value_map[2]
      key = key_value_map[3]
      associate_data(part, key.to_sym, data_value) unless part.nil?
    end
  end

  # Adds data to list of coordinates
  # If there is already a data value present, the new data value will
  # either replace it, or be appended to it
  # based on the value of the append boolean
  #
  # @param coordinates [Array<Row(int), Column(int), Optional(String)] the
  #       coordinate list to be modified
  # @param data [String] string to be added to the list data
  # @param append: [Boolean] default true.  Replace if false
  def append_x_to_rcx(coordinates, data, append: true)
    data = data.to_s
    if coordinates[2].nil? || !append
      coordinates[2] = data
    else
      coordinates[2] += ', ' + data
    end
    coordinates
  end


  # Creates an array of samples that are the same in two different Collections
  #
  # @param collection_a [Collection] a collection
  # @param collection_b [Collection] a collection
  # @return [Array<Sample>]

  def find_like_samples(collection_a, collection_b)
    collection_a.parts.map!(&:sample) & collection_b.parts.map!(&:sample)
  end


  # Returns an array of parts in the Collection that match the right Sample
  #
  # @param collection [Collection] the Collection that the Item (part) is in
  # @param sample [Sample] the Sample searched for

  def parts_from_sample(collection, sample)
    part_location = collection.find(sample)
    parts = []
    part_location.each do |coordinates|
      parts.push(collection.part(coordinates[0], coordinates[1]))
    end
    parts
  end


  # Adds provenance history to to_object and from from_object
  #
  # @param from_obj [Item] object that provenance is coming from
  # @param to_obj [Item] the object that provenance is going to
  
  def from_obj_to_obj_provenance(to_obj, from_obj)
    raise "Object #{to_obj.id} is not an item" unless to_obj.is_a? Item
    raise "Object #{from_obj.id} is not an item" unless from_obj.is_a? Item

    from_obj_map = AssociationMap.new(from_obj)
    to_obj_map = AssociationMap.new(to_obj)
    add_provenance(from: from_obj, from_map: from_obj_map,
                   to: to_obj, to_map: to_obj_map)
    from_obj_map.save
    to_obj_map.save
  end
end

library: {name: CollectionDisplay, category: Collection_Management}
code_source:
# Justin Vrana
#
# modified by:
# Cannon Mallory
# malloc3@uw.edu
#
# Modifications include:
# Optional Checkable boxes.  Additional Documentation

# Methods for displaying information about collections
module CollectionDisplay
  # Highlights all non-empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_non_empty(collection, check: true, &rc_block)
    highlight_collection_rc(collection, collection.get_non_empty,
                            check: check, &rc_block)
  end

  # Highlights all empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_empty(collection, check: true, &rc_block)
    highlight_collection_rc(collection, collection.get_empty,
                            check: check, &rc_block)
  end

  # Highlights all non-empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_alpha_non_empty(collection, check: true, &rc_block)
    highlight_alpha_rc(collection, collection.get_non_empty,
                       check: check, &rc_block)
  end

  # Highlights all empty slots in collection
  #
  # @param collection [Collection] the collection
  # @param check [Boolean] Optional weather cells should be Checkable
  # @param &rc_block [Block] Optional block to determine rc_list
  # @return [Table]
  def highlight_alpha_empty(collection, check: true, &rc_block)
    highlight_alpha_rc(collection, collection.get_empty,
                       check: check, &rc_block)
  end

  # Gets a list of the coordinates and alphanumeric locations
  #
  # @param collection [Collection] the collection that items are going to
  # @param samples [The samples that locations are wanted from]
  #
  # @return [Array<Array<row, column, location>] Coordinates and
  #      locations in same order as sample array
  def get_rcx_list(collection, samples)
    coordinates_and_data = []
    samples.each do |sample|
      sample_coordinates = get_obj_location(collection, sample)
      sample_locations = get_alpha_num_location(collection, sample)

      sample_coordinates.each do |coordinates|
        coordinates.push(sample_locations) # [0,0,A1]
        coordinates_and_data.push(coordinates)
      end
    end
  end

  # Highlights all cells listed in rc_list (CHANGED NAME)
  #
  # @param collection [Collection] the collection which should be highlighted
  # @param rc_list [Array] array of rc [[row,col],...]
  #                       row = int
  #                       col = int
  # @param check [Boolean] Optional whether cells should be Checkable
  # @param &rc_block [Block] to determine rc list
  # @return [Table]
  def highlight_collection_rc(collection, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, '']
    }
    highlight_collection_rcx(collection, rcx_list, check: check)
  end

  # Highlights all cells in ROW/COLUMN/X
  #
  #
  # @param collection [Collection] the collection
  # @param rcx_list [Array] array of [[row, colum, x],...]
  #     row = int
  #     col = int
  #     x = string
  # @return [Table]
  def highlight_collection_rcx(collection, rcx_list, check: true)
    rows, columns = collection.dimensions
    table = create_collection_table(rows: rows, columns: columns)
    highlight_rcx(table, rcx_list, check: check)
  end

  # Makes an alpha numerical display of collection wells listed in rc_list
  #
  # @param collection [Collection] the collection
  # @param rc_list [Array] Array of rows and columns [[row,col],...]
  # @param check [Boolean] Default True weather cells are checkable
  # @param &rc_block [Block] Optional tbd
  def highlight_alpha_rc(collection, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, '']
    }
    highlight_alpha_rcx(collection, rcx_list, check: check)
  end

  # Makes an alpha numerical display of collection wells listed in rcx_list
  #
  # @param collection [Collection] the collection
  # @param rc_list [Array] Array of rows and columns [[row,col,x],...]
  #         row,column are int, x is string
  # @param check [Boolean] Default True weather cells are checkable
  # @param &rc_block [Block] Optional tbd
  def highlight_alpha_rcx(collection, rcx_list, check: true)
    rows, columns = collection.dimensions
    tbl = create_collection_table(rows: rows, columns: columns)
    rcx_list.each do |r, c, x|
      highlight_cell(tbl, r, c, x, check: check)
    end
    tbl
  end

  # Creates a table with the same dimensions as the input collection
  #
  # @param collection [Collection] the collection to be represented by the table
  # @param add_headers [Boolean] optional True
  # @return tab [Table] a table to be displayed
  def create_collection_table(rows:, columns:)
    size = rows * columns
    slots = (1..size + rows + columns + 1).to_a
    tab = slots.each_slice(columns + 1).map do |row|
      row.map do
        { class: 'td-empty-slot' }
      end
    end

    labels = Array(1...size + 1)
    tab.each_with_index do |row, row_idx|
      row.each_with_index do |col, col_idx|
        if row_idx.zero?
          col[:content] = "<b><u>#{col_idx}</u></b>"
        elsif col_idx.zero?
          col[:content] = "<b><u>#{get_alpha(row_idx)}</u></b>"
        else
          col[:content] = labels.first
          labels = labels.drop(1)
        end
      end
    end
    tab.first.first[:content] = '<b>:)</b>'
    tab
  end

  # converts numbers to alphabetical values (eg 1->A 27-AA etc)
  #
  # @param num [Integer] the integer to be converted
  def get_alpha(num)
    alpha26 = ('A'...'AA').to_a
    return "" if num < 1
    string = ""
    loop do
      num, r = (num-1).divmod(26)
      string.prepend(alpha26[r])
      break if num.zero?
    end
    string
  end

  # Highlights a specific location in a table (TODO TABLE CLASS)
  #
  # @param tbl [Table] the table which parts are being highlighted
  # @param row [Integer] the row
  # @param col [Integer] the column
  # @param id [String] what will be printed in the table
  #                    (TODO EMPTY STRING/DON'T REPLACE CONTENT)
  # @param check [Boolean] optional determines if cell is checkable or not
  def highlight_cell(tbl, row, col, id, check: true)
    tbl[row + 1][col + 1] = { content: id, class: 'td-filled-slot', check: check }
  end

  # Highlights all cells in ROW/COLUMN/X  (TODO TABLE CLASS)
  # X can be any string that is to be displayed in cell
  #
  # @param table [table] the table with cells to be highlighted
  # @param rcx_list [array] array of [[row, column, x],...]
  #     row = int
  #     col = int
  #     x = string
  # @return [table]
  def highlight_rcx(table, rcx_list, check: true)
    rcx_list.each do |rcx|
      rcx.push(check)
    end
    highlight_rcx_check(table, rcx_list)
    table
  end

  # Highlights all cells in ROW/COLUMN/X  (TODO TABLE CLASS)
  # X can be any string that is to be displayed in cell
  #
  # @param table [Table] the table with cells to be highlighted
  # @param rcx_check_list [Array] array of [[row, column, data, check],...]
  # @return [Table]
  def highlight_rcx_check(table, rcx_check_list)
    rcx_check_list.each do |row, column, data, check|
      highlight_cell(table, row, column, data, check: check)
    end
    table
  end

  # TODO: TABLE LIB
  # Highlights all cells listed in rc_list
  #
  # @param collection [Collection] the collection which should be highlighted
  # @param rc_list [Array] array of rc [[row,col],...]
  #                       row = int
  #                       col = int
  # @param check [Boolean] true if cells should be Checkable
  # @param &rc_block [Block] to determine rc list
  # @return [Table]
  def highlight_rc(table, rc_list, check: true, &_rc_block)
    rcx_list = rc_list.map do |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    end
    highlight_rcx(table, rcx_list, check: check)
  end

  # Highlights all slots in all collections in operation list
  #
  # @param ops [OperationList] Operation list
  # @param id_block [Block] Optional Unknown
  # @param check [Boolean] true if cells should be Checkable
  # @param &fv_block [Block] Optional Unknown
  # @return [Table]
  def highlight_collection(ops, id_block: nil, check: true, &fv_block)
    g = ops.group_by { |op| fv_block.call(op).collection }
    tables = g.map do |collection, grouped_ops|
      rcx_list = grouped_ops.map do |op|
        fv = fv_block.call(op)
        id = id_block.call(op) if id_block
        id ||= fv.sample.id
        [fv.row, fv.column, id]
      end
      tbl = highlight_collection_rcx(collection, rcx_list, check: check)
      [collection, tbl]
    end
    tables
  end

  # TODO: write highlight heat map method for table
  # Creates table illustrating data associated with keys
  #  for each part noted in rc_list
  #
  # @param collection [Collection] the collection
  # @param keys [Array<String>] an array of all keys that point to desired data
  # @param rc_list [Array<Array<row, col>...>] optional array of locations
  #        if not given will display all non_empty
  # @return table of parts with data information
  def display_data(collection, keys, rc_list: nil)
    if rc_list.nil?
      rc_list = collection.get_non_empty
    end
    rcx_array = []
    rc_list.each do |loc|
      data_string = ''
      keys.each_with_index do |key, idx|
        part = collection.part(loc[0], loc[1])
        data = get_associated_data(part, key).to_s
        unless data.nil?
          data_string += ', ' unless idx.zero?
          data_string += data
        end
      end
      loc.push(data_string)
      rcx_array.push(loc)
    end
    highlight_collection_rcx(collection, rcx_array, check: false)
  end
end

library: {name: CollectionLocation, category: Collection_Management}
code_source:
# frozen_string_literal: true

# Cannon Mallory
# malloc3@uw.edu
#
# Methods to facilitate sample management within collections
module CollectionLocation
  ALPHA26 = ('A'...'Z').to_a

  # Gets the location string of a sample in a collection
  #
  # @param collection [Collection] the collection containing the sample
  # @param sample [Sample] the Sample that you want to locate
  # @return [Hash{sample: location}] the Alpha Numeric location(s) e.g. A1, A2
  def get_alpha_num_location(collection, items)
    items = [items] unless items.is_a?(Array)

    hash_of_samples = {}
    items.each do |sample|
      coordinates = collection.find(sample)
      alpha_num_locations = []
      coordinates.each do |coordinate_set|
        alpha_num_locations << convert_coordinates_to_location(coordinate_set)
      end
      locations.join(',')
      hash_of_samples[sample] = locations
    end
    hash_of_samples
  end

  # Converts an array of coordinates to alpha numerical locations
  #
  # @param coordinates [Array<row,column>] set of coordinates
  # @return [String] alpha numerical location
  def convert_coordinates_to_location(coordinates)
    ALPHA26[coordinates[0]] + (coordinates[1] + 1).to_s
  end

  # Converts alpha numerical location to an Array of coordinates
  #
  # @param alpha [String] alpha numerical location
  # @return [Array<r,c>] array of row and column
  def convert_location_to_coordinates(alpha)
    alpha_characters = ''
    alpha.length.times do |idx|
      char = alpha[idx, idx+1]
      alpha_characters += char unless float(char).nil?
    end
    row = ALPHA26.find_index(alpha_characters)
    column = alpha[1..-1].to_i - 1
    [row, column]
  end

  # Finds the location coordinates of an multiple items/samples
  #
  # @param collection [Collection] the Collection containing the Item or Sample
  # @param items [Array<objects>] Item, Part, or Sample to be found
  # @return [Hash{sample: [row, column]}] 
  def get_items_coordinates(collection, items)
    hash_of_locations = {}
    items.each do |item|
      hash_of_locations[item] = collection.find(item)
    end
    hash_of_locations
  end

  # Finds a part from an alpha numerical string location(e.g. A1, B1)
  #  TODO Move to krill
  #
  # @param collection [Collection] the collection that contains the part
  # @param location [String] the location of the part within the collection
  # @return part [Item] the item at the given location
  def get_part(collection, location)
    row, column = convert_location_to_coordinates(location)
    collection.part(row, column)
  end
end

library: {name: CollectionTransfer, category: Collection_Management}
code_source:
# Cannon Mallory
# malloc3@uw.edu
#
# Methods for transferring items into and out of collections

needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'Standard Libs/AssociationManagement'
needs 'Collection_Management/CollectionLocation'
needs 'Collection_Management/CollectionData'

module CollectionTransfer
  include Units
  include Debug
  include AssociationManagement
  include CollectionLocation
  include CollectionData

  VOL_TRANSFER = 'Volume Transferred'.to_sym

  # gets the number of plates
  #
  # @param operations [OperationList] list of operations in job
  # @param role [String] indicates whether it's an input or output collection
  # @returns Array[collection] the number of plates
  def get_array_of_collections(operations, role)
    collection_array = []
    operations.each do |op|
      obj_array = op.inputs if role == 'input'
      obj_array = op.outputs if role == 'output'
      obj_array.each do |fv|
        collection_array.push(fv.collection) unless fv.collection.nil?
      end
    end
    collection_array.uniq
  end

  # Determines if there are multiple plates
  #
  # @param operations [OperationList] list of operations in job
  # @param role [String], whether plates are for input or output
  # @returns boolean true if multiple plates
  def multiple_plates?(operations, role: 'input')
    return true if get_num_plates(operations, role) > 1
  end

  # gets the number of plates
  #
  # @param operations [OperationList] list of operations in job
  # @param role [String] indicates whether it's an input or output collection
  # @returns [Int] the number of plates
  def get_num_plates(operations, role)
    get_array_of_collections(operations, role).length
  end



  # Transfers samples from fv_array to collection.  If the collection cannot
  # hold all the samples it will create more collections to hold all samples.
  # Will automatically populate the collection
  #
  # fv_array can be of items in collections or not doesn't matter
  #
  #
  # Optional: Can provide instructions for transferring samples to collections
  #
  # Samples can be either FieldValue or Item/Part
  # Groups samples by collection for easier transfer
  # Uses transfer_to_to_collection method
  #
  # @param input_fv_array [Array<FieldValues>] an array of field values
  # @param to_collection [Collection] Should have samples already associated
  # @param transfer_vol [Int] volume in sample to transfer
  def transfer_subsamples_to_working_plate(fv_array, to_collection: nil, 
                                      collection_type: nil, transfer_vol: nil,
                                      instructions: true, add_column_wise: false)

    grouped_fv_array = fv_array.group_by{|fv| fv.part?}
    collections = []
    grouped_fv_array.each do |is_part, sub_fv_array|
      if is_part
        collections += transfer_collection_to_collection(sub_fv_array, 
                                        to_collection: to_collection,
                                        collection_type: collection_type,
                                        transfer_vol: transfer_vol,
                                        instructions: instructions,
                                        add_column_wise: add_column_wise)
      else
        collections += transfer_items_to_collection(sub_fv_array, 
                                          to_collection: to_collection,
                                          collection_type: collection_type,
                                          transfer_vol: transfer_vol,
                                          instructions: instructions,
                                          add_column_wise: add_column_wise)
      end
    end
    collections.uniq
  end


  # Handles transfers of items from one collection to another collection
  #
  # If an 'association_map' is given 'to_collection' must also be given
  #  it will assume that the plate is already plated.
  #  'array_of_samples', 'one_to_one', and 'populate_collection' will be ignored
  #
  # If array_of_samples is not given then it will be assumed that all samples
  #   should transferred.
  # 
  #
  # @param input_collection [Collection] the collection samples come from
  # @param to_collection[Collection] the collection samples will move to
  # @param transfer_vol [String] volume of sample to transfer (INCLUDE UNITS)
  # @param populate_collection [Boolean] true if the to_collection needs to be
  #        populated false if the to_collection has already been populated.
  # @param array_of_samples [Array<Sample>] Optional
  # @param instructions [Boolean] default true to include instructions
  # @param association_map [Array<{to_loc: [r, c], from_loc: [r, c]}, ...>]
  #        a map showing the associations from one collection to another.
  def transfer_from_collection_to_collection(from_collection, 
                                             to_collection: nil,
                                             collection_type: nil,
                                             transfer_vol: nil,
                                             populate_collection: true,
                                             array_of_samples: nil,
                                             instructions: true,
                                             one_to_one: false,
                                             association_map: nil,
                                             column_wise: false)
    collections, association_maps = determine_collections_and_association_map(from_collection, 
                                                                to_collection: to_collection,
                                                                collection_type: collection_type,
                                                                populate_collection: populate_collection,
                                                                array_of_samples: array_of_samples,
                                                                instructions: instructions,
                                                                one_to_one: one_to_one,
                                                                association_map: association_map,
                                                                add_column_wise: column_wise)

    collections.each_with_index do |collection, idx|
      association_map = association_maps[idx]
      associate_plate_to_plate(to_collection: collection, from_collection: from_collection,
                              association_map: association_map, transfer_vol: transfer_vol)
      if instructions
        collection_to_collection_transfer_instructions(to_collection: collection, from_collection: from_collection,
                                       association_map: association_map, transfer_vol: transfer_vol)
      end
    end
    collections
  end



  # TODO Break this apart
  # Assists with transfer of items into a collection
  # Optional Instructions to tech
  #
  # @param fv_array [Array<item or field values>] the samples to be transferred
  #
  # @param to_collection [Collection] (optional)
  # @param collection_type [String] (optional)
  #    NOTE: exactly one to_collection or collection_type must be given
  #
  # @param transfer_volume [Float] the volume that is to be transferred
  # @param instructions [Boolean] true if instructions are to be displayed
  #

  # @param association_map [Array<{to_loc: [row, col], from_loc: item},...>]
  #        if a map is given then the plate is assumed to be populated already
  #
  # @return collections [Array<Collections>] the collections created/used
  def transfer_items_to_collection(fv_array, to_collection: nil,
                                             collection_type: nil,
                                             transfer_vol: nil,
                                             instructions: true,
                                             association_map: nil,
                                             add_column_wise: false)
    sample_array = fv_array.map(&:sample)
    array_of_association_maps = []
    collections = []

    if association_map.nil?
      collections = make_and_populate_collection(sample_array,
                                            first_collection: to_collection,
                                            collection_type: collection_type,
                                            label_plates: instructions,
                                            add_column_wise: add_column_wise)
      collections.each do |collection|
        association_map = make_item_to_collection_association_map(sample_array,
                                                        collection: collection)
        array_of_association_maps.push(association_map)
      end
    else
      ProtocolError 'Must Give to_collection' if to_collection.nil?
      array_of_association_maps.push(association_map)
      collections.push(to_collection)
    end

    array_of_association_maps.each_with_index do |map, idx|
      collection = collections[idx]
      associate_items_to_wells(to_collection: collection, association_map: map,
                                                    transfer_vol: transfer_vol)
      next unless instructions


      item_to_collection_transfer_instructions(to_collection: collection,
                                               association_map: map,
                                               transfer_vol: transfer_vol)
    end
    collections
  end

  # Assist with the transfer from a collection to an item.
  # An association map must first be created
  #

  # @param from_collection [Collection] the collection that is being transferred
  # @param association_map [Array<{to_loc: item, from_loc: [row, col]}, ...>]
  # @param transfer_vol [String/Int] the volume being transferred
  # @param instructions [Boolean] optional instructions
  def transfer_from_collection_to_items(from_collection:, association_map:,
                                                          transfer_vol: nil,
                                                          instructions: true)
    associate_wells_to_item(from_collection: from_collection, association_map: association_map,
                            transfer_vol: transfer_vol)
    next unless instructions

    collection_to_items_transfer_instructions(from_collection: from_collection,
                                              association_map: association_map,
                                              transfer_vol: transfer_vol)
  end

  # Instructions on relabeling plates to new plate ID
  # Tracks provenance properly though transfer
  #
  # @param plate1 [Collection] plate to relabel
  # @param plate2 [Collection] new plate label
  def relabel_plate(from_collection, to_collection: nil)
    collection_type = nil

    collection_type = from_collection.object_type.name if to_collection.nil?

    unless from_collection.object_type == to_collection.object_type
      ProtocolError 'Object Types do not match'
    end

    relabeled_collection = transfer_from_collection_to_collection(from_collection,
                                                to_collection: to_collection,
                                                collection_type: collection_type,
                                                instructions: false,
                                                one_to_one: true,
                                                add_column_wise: false).first
    show do
      title 'Rename Plate'
      note "Relabel plate <b>#{from_collection.id}</b> with
                        <b>#{relabeled_collection.id}</b>"
    end
    to_collection
  end


  # To offload work from transfer_from_collection_to_collection
  # Handles large if else cases and returns collections and association maps
  def determine_collections_and_association_map(from_collection, 
                                                to_collection: nil,
                                                collection_type: nil,
                                                populate_collection: true,
                                                array_of_samples: nil,
                                                instructions: true,
                                                one_to_one: false,
                                                association_map: nil,
                                                add_column_wise: false)
    association_maps = []
    collections = []
    if !association_map.nil?
      raise 'to_collection not given' if to_collection.nil?

      collections.push(to_collection)
      association_maps.push(association_map)
    elsif one_to_one
      unless array_of_samples.nil?
        raise 'array_of_samples cannot ge given if one_to_one'
      end


      if populate_collection || to_collection.nil?
        # TODO this may not work as expected....  need to think about this
        array_of_samples = get_samples_from_obj(from_collection.parts)

        collections = make_and_populate_collection(array_of_samples, 
                                                first_collection: to_collection,
                                                collection_type: collection_type,
                                                label_plate: instructions,
                                                add_column_wise: false)
      else
        collections = [to_collection]
      end
      association_map = make_one_to_many_association_map(
                                                  to_collection: collection,
                                                  from_collection: from_collection,
                                                  samples: nil,
                                                  one_to_one: true)
      association_maps.push(association_map)
    else
      if array_of_samples.nil?
        array_of_samples = get_samples_from_obj(from_collection.parts)
      end


      array_of_samples.map! do |object| 
        if object.is_a? Sample
          object
        else
          object = object.sample
        end
      end      
      if populate_collection || to_collection.nil?
        collections = make_and_populate_collection(array_of_samples, 
                                                first_collection: to_collection,
                                                collection_type: collection_type,
                                                label_plates: instructions)
      else
        collections = [to_collection]
      end

      collections.each do |collection|
        association_map = make_one_to_many_association_map(
                                            to_collection: collection,
                                            from_collection: from_collection,
                                            samples: array_of_samples,
                                            one_to_one: one_to_one)
        association_maps.push(association_map)
      end
    end
    [collections, association_maps]
  end

  def get_samples_from_obj(array)
    array.map do |part|
      return part.sample unless part.is_a? Sample

      part
    end
    array
  end

  # @warning Use transfer_subsamples_to_working_plate instead
  #
  # @param fv_array Array<FieldValues>] an array of field values of collections
  # @param to_collection [Collection]
  # @param transfer_vol [String/Int] volume in sample to transfer
  # @param instructions [Boolean] true if instructions are to be shown
  def transfer_collection_to_collection(fv_array, to_collection: nil, 
                                                  collection_type: nil, 
                                                  transfer_vol: nil,
                                                  instructions: nil, 
                                                  add_column_wise: false)
    collections = []
    sample_array_by_collection = fv_array.group_by { |fv| fv.collection }
    sample_array_by_collection.each do |from_collection, fv_array|
      sample_array = fv_array.map { |fv| fv.sample }
      collections = transfer_from_collection_to_collection(from_collection, 
                                               to_collection: to_collection,
                                               collection_type: collection_type,
                                               transfer_vol: transfer_vol,
                                               array_of_samples: sample_array,
                                               instructions: instructions)
    end
    collections
  end


  # Transfer instructions for tech
  #

  # @param to_collection [Collection] the to collection
  # @param from_collection [Collection] the from collection
  # @param association_map [Array<{to_loc: loc, from_loc: loc}, ...>] optional
  #         if nil will assume one-to-one
  # @param transfer_vol [String] Optional else all
  def collection_to_collection_transfer_instructions(to_collection:,
                                                     from_collection:,
                                                     association_map: nil,
                                                     transfer_vol: nil)
    if transfer_vol.nil?
      amount_to_transfer = 'everything'
    else
        amount_to_transfer = {transfer_vol}.to_s
    end


    if association_map.nil?
      association_map = one_to_one_association_map(to_collection: to_collection,
                                              from_collection: from_collection)
    end

    from_rcx = []
    to_rcx = []

    association_map.each do |loc_hash|
      from_location = loc_hash[:from_loc]
      to_location = loc_hash[:to_loc]
      from_alpha_location = convert_coordinates_to_location(to_location)
      from_rcx.push(append_x_to_rcx(from_location, from_alpha_location))
      to_rcx.push(append_x_to_rcx(to_location, from_alpha_location))
    end

    show do
      title 'Transfer from one plate to another'
      note "Please transfer <b>#{amount_to_transfer}</b> from Plate
          (<b>ID:#{from_collection.id}</b>) to plate
          (<b>ID:#{to_collection.id}</b>) per tables below"
      separator
      note "Stock Plate (ID: <b>#{from_collection.id}</b>):"
      table highlight_collection_rcx(from_collection, from_rcx,
                                     check: false)
      note "Working Plate (ID: <b>#{to_collection}</b>):"
      table highlight_collection_rcx(to_collection, to_rcx,
                                     check: false)
    end
  end

    # (Verified)
    # Instructions to transfer items to wells of a collection
    #
    # @param to_collection [Collection] the plate that is getting the association
    # @param from_item [item] the item that is transferring the association
    # @param Association_map [Array<{to_loc: loc, from_loc: item}>] 
    #     Association map of where items are coming from.
    #     If nil will assume transferred to all wells.
    # @param transfer_vol [Integer] the volume transferred if applicable default
    #         nil if nil then will state unknown transfer vol
    def item_to_collection_transfer_instructions(to_collection:, association_map: nil,
      transfer_vol: nil)
      if transfer_vol.nil?
        amount_to_transfer = "everything"
      else
        amount_to_transfer = "#{transfer_vol}"
      end
      list_of_items = [to_collection]
      rcx_list = []
      association_map.each do |map|
        to_location = map[:to_loc]
        convert_location_to_coordinates(to_location) if to_location.is_a? String


        from_item = map[:from_loc]
        from_item = Item.find(from_item) unless from_item.is_a? Item
        list_of_items.push(from_item)

        rcx_list.push([to_location[0], to_location[1], from_item.id])
      end

      show do
        title "Get items for transfer"
        note 'Please get the following items'
        table create_location_table(list_of_items)
      end


      show do
        title 'Transfer from items to the plate'
        note "Please transfer <b>#{amount_to_transfer}</b> from the items 
              listed to Plate #{to_collection.id}"
        separator
        note "Plate (ID: <b>#{to_collection.id}</b>):"
        table highlight_collection_rcx(to_collection, rcx_list,
                                      check: true)
      end
    end

    # Verified
    # Instructions to transfer from wells in a collection to items
    #
    # @param to_collection [Collection] the plate that is getting the association
    # @param from_item [item] the item that is transferring the association
    # @param Association_map [Array<{to_loc: loc, from_loc: item}>] 
    #     If nil will assume transferred to all wells.
    # @param transfer_vol [Integer] the volume transferred if applicable default
    #   nil if nil then will state unknown transfer vol
    def collection_to_items_transfer_instructions(from_collection:,
                                                  association_map: nil,
                                                  transfer_vol: nil)
      if transfer_vol.nil?
        amount_to_transfer = "everything"
      else
        amount_to_transfer = "#{transfer_vol}"
      end
      list_of_items = [to_collection]
      rcx_list = []

      association_map.each do |map|
        from_location = map[:from_loc]

        if from_location.is_a? String
          convert_location_to_coordinates(from_location)
        end

        to_item = map[:to_loc]
        to_item = Item.find(to_item) unless to_item.is_a? Item
        list_of_items.push(to_item)

        rcx_list.push([from_location[0], from_location[1], to_item.id])
      end


      show do
        title "Get items for transfer"
        note 'Please get the following items'
        table create_location_table(list_of_items)
      end


      show do
        title 'Transfer from one plate to another'
        note "Please transfer <b>#{amount_to_transfer}</b> from Plate 
              #{from_collection.id} to the items listed"
        separator
        note "Plate (ID: <b>#{from_collection.id}</b>):"
        table highlight_collection_rcx(from_collection, rcx_list,
                                      check: true)
      end
    end

    # Creates an association map of items to a collection (verified)
    #
    # @param fv_array [Array<FieldValue or Items>] field values or items
    # @param collection [to_collection] the collection that things are in
    # @return [Array<{to_loc: location, from_loc: location}, ...]
    def make_item_to_collection_association_map(fv_array, collection:)
      association_map = []
      fv_array.each do |item|
        item = item.item if item.is_a? FieldValue
        unless item.is_a? Sample
          item = item.sample
        end

        to_location = collection.find(item)
        to_location.each do |loc|
          ProtocolError 'Wrong Loc format' unless loc.is_a? Array
          from_location = item.id
          unless loc.nil?
            association_map.push({to_loc: loc, from_loc: from_location})
          end
        end
      end
      association_map
    end


    # Tracks provenance and adds transfer vol association
    # for item to well transfers
    #
    #
    # @param to_collection [Collection] the plate that is getting the association
    # @param from_item [item] the item that is transferring the association
    # @param Association_map [Array<{to_loc: loc, from_loc: item},...>]
    #     If nil will assume transferred to all wells.
    #     Can take standard Array of Hashes as used in other methods in this
    #       library
    # @param transfer_vol [Integer] the volume transferred if applicable default
    #   nil if nil then will state unknown transfer vol
    def associate_items_to_wells(to_collection:, association_map: nil,
                                transfer_vol: nil)
      association_map.each do |map|
        to_loc = map[:to_loc]
        from_item = map[:from_loc]
        from_item = Item.find(from_item) unless from_item.is_a? Item

        to_part = to_collection.part(to_loc[0], to_loc[1])

        unless transfer_vol.nil?
          associate_transfer_vol(transfer_vol, VOL_TRANSFER, to_part: to_part,
                                                            from_part: from_item)
        end
        from_obj_to_obj_provenance(to_part, from_item)
      end
    end

    # Creates data association based on plate map for transfer
    # Additionally tracks provenance through items.
    #
    #
    # @param from_collection [Collection] the is transferring the association
    # @param to_item [item] the item that is getting_the association
    # @param Association_map [Array<Hash{to_loc: item, from_loc: [row, col]}, ...] 
    #      Association map of where items are coming from and going to.
    # @param transfer_vol [String] the volume transferred if applicable
    def associate_wells_to_item(from_collection:, association_map: nil,
                                transfer_vol: nil)
      association_map.each do |map|
        from_loc = map[:from_loc]
        if from_loc.is_a? String
          from_loc = convert_location_to_coordinates(from_loc)
        end

        from_part = from_collection.part(from_loc[0], from_loc[1])
        to_item = map[:to_loc]
        to_item = Item.find(to_item) unless to_item.is_a? Item

        unless transfer_vol.nil?
          associate_transfer_vol(transfer_vol, VOL_TRANSFER,
                                              to_part: to_item,
                                              from_part: from_part)
        end
        from_obj_to_obj_provenance(to_item, from_part)
      end
    end


    # Makes proper association_map between to_collection and from_collection
    #
    # @param to_collection [Collection] the collection that things are moving to
    # @param from_collection [Collection] the collection that things are coming from
    # @param samples [Array<{to_loc: loc, from_loc: loc}>] array of samples that
    #             exists in both collections
    # @param one_to_one [Boolean] if true then will make an exact one to one transfer
    #         else creates map based on "similar" samples
    def make_one_to_many_association_map(to_collection:, from_collection:, 
                                         samples: nil, one_to_one: false)
      if one_to_one
        return one_to_one_association_map(to_collection: to_collection, 
                                          from_collection: from_collection)
      end


      if samples.nil?
        samples = find_like_samples(to_collection, from_collection)
      end
      # Array<{to_loc: loc, from_loc: loc}

      association_map = []
      samples_with_no_location = []

      samples.each do |sample|
        to_loc = to_collection.find(sample)
        from_loc = from_collection.find(sample)
        # TODO: figure out how the associations will work if there are multiple
        # to and from locations (works partially may could use improvement)

        if to_loc.nil? || from_loc.nil?
          samples_with_no_location.push(sample)
        end

        if from_loc.length == 1
          to_loc.each do |t_loc|
            association_map.push({ to_loc: t_loc, from_loc: from_loc.first })
          end
        else
          from_loc.each do |from_loc|
            match = false
            to_loc.each do |to_loc|
              if to_loc[0] == from_loc[0] && to_loc[1] == from_loc[1]
                match = true
                association_map.push({ to_loc: to_loc, from_loc: from_loc })
              end
            end
            ProtocolError "AssociationMap was not properly created." unless match
            # TODO: Create a better error handle here 
            # (make it so it shows them the issue more explicitly)
          end
        end
        association_map
      end

      unless samples_with_no_location.length == 0
        cancel_plan = show do
          title 'Some Samples were not found'
          warning 'Some samples there were expected were 
                        not found in the given plates'
          note 'The samples that could not be found are listed below'
          select ['Cancel', 'Continue'], var: 'cancel',
                  label: 'Do you want to cancel the plan?', default: 1
          samples_with_no_location.each do |sample|
            note "#{sample.id}"
          end
        end

        # TODO: Fail softly/continue with samples that were found
        if cancel_plan[:'cancel'] == 'Cancel'
          raise 'User Canceled plan because many samples could not be found'
        else
          raise "This module doesn't currently support 
                                continuing with existing samples"
        end
      end

      association_map
    end

    # Creates a one to one association map
    #
    # @param to_collection [Collection] the to collection
    # @param from_collection [Collection] the from collection
    # @param samples [Array<{to_loc: loc, from_loc: loc}, ...>]
    def one_to_one_association_map(to_collection:, from_collection:)
      to_row_dem, to_col_dem = to_collection.dimensions
      from_row_dem, from_col_dem = from_collection.dimensions
      unless to_row_dem == from_row_dem && to_col_dem == from_col_dem
        ProtocolError "Collection Dimensions do not match"
      end

      association_map = []
      to_row_dem.times do |row|
        to_col_dem.times do |col|
          unless to_collection.part(row, col).nil? || 
                          from_collection.part(row, col).nil?
            loc = [row, col]
            association_map.push({ to_loc: loc, from_loc: loc })
          end
        end
      end
      association_map
    end


    # Creates Data Association between to_collection and from_collection
    #
    # @param to_collection [Collection] the to collection
    # @param from_collection [Collection] the from collection
    # @param Association_map [Array<Hash<from_loc: loc1, to_loc: loc2>]
    #             optional Association map else one_to_one
    # @param transfer_vol [Integer] the volume transferred else all
    def associate_plate_to_plate(to_collection:, from_collection:, 
                                 association_map: nil, transfer_vol: nil)
      # if there is no association map assume one_to_one
      if association_map.nil?
        association_map = one_to_one_association_map(
                                                to_collection: to_collection,
                                                from_collection: from_collection)
      end

      from_obj_to_obj_provenance(to_collection, from_collection)

      association_map.each do |loc_hash|
        to_loc = loc_hash[:to_loc]
        from_loc = loc_hash[:from_loc]

        to_loc = convert_location_to_coordinates(to_loc) if to_loc.is_a? String
        if from_loc.is_a? String
          from_loc = convert_location_to_coordinates(from_loc)
        end

        to_part = to_collection.part(to_loc[0], to_loc[1])
        from_part = from_collection.part(from_loc[0], from_loc[1])

        unless transfer_vol.nil?
        associate_transfer_vol(transfer_vol, VOL_TRANSFER, to_part: to_part,
                                                          from_part: from_part)
      end

      from_obj_to_obj_provenance(to_part, from_part)
    end
  end

  # Records the volume transferred
  #
  # @param vol the volume transferred
  # @param to_part: part that is being transferred to
  # @param from_part: part that is being transferred from
  def associate_transfer_vol(vol, key, to_part:, from_part:)
    vol_transfer_array = get_associated_data(to_part, key)
    vol_transfer_array = [] if vol_transfer_array.nil?
    vol_transfer_array.push([from_part.id, vol])
    associate_data(to_part, key, vol_transfer_array)
  end
end #end of CollectionManagement
